# DERIVED FILE -- do not edit by hand.
# Regenerate:
#   sed '/^Device,MightexPolygon1000,/d' single_cam_red_LUNF.cfg > single_cam_red_noDMD.cfg
# Parent:  single_cam_red_LUNF.cfg  (itself derived from DMD_dualcam_LUNF.cfg)
#
# Edits against the parent -- one line:
#
#   removed  Device,MightexPolygon1000,...
#     The Mightex Polygon vendor package is pinned to MM device interface v71
#     and lives only in the lab's own C:\Program Files\Micro-Manager-2.0 install;
#     it is absent from the pymmcore-plus nightly (2.0.3_20260806) that satisfies
#     device API v75, so the parent aborts at its line 33 with
#       Failed to load module "mmgr_dal_MightexPolygon1000"
#     and nothing after it loads. Same v71-vs-v75 pin README item 4.3 names as
#     the FRAP blocker. FRAP needs the parent, and needs the pin fixed.
#
# THE AURA IS BACK IN, and why it was briefly out (2026-09-03).
#   Loading first failed at Core,Initialize,1 with "Error in device Aura:
#   Error : 573". Diagnosed rather than worked around: COM7 opened cleanly from
#   a bare SerialPort, so the port was free and 573 was the chassis not
#   answering -- it was powered off. Once switched on it initialised first try.
#   573 from the Lumencor adapter means "no reply", not "no port".
#
# CAMERA IDENTITY, measured 2026-09-03 -- the parent's header asks for this.
#   Camera-1 = serial A23H723003   (Kinetix_blue in the parent)
#   Camera-2 = serial A24M723015   (Kinetix_red, the camera this config keeps)
# Both read with the other body free. Whether the indices hold when the Tweez
# GUI is holding one is still untested.
#
# LIGHT ENGINES, read off the devices 2026-09-03 -- data/light_sources.yaml is
# wrong about both, so trust this until that file is corrected.
#   LightEngine  COM3  "Spectra III 8-NII-XS"  s/n 28145  fw 3.5.4
#                lines VIOLET BLUE CYAN TEAL GREEN YELLOW RED NIR   (8, named)
#   Aura         COM7  "Aura III 5-NII-WA"     s/n 30859  fw 3.14.7
#                lines UV CYAN GREEN RED NIR                        (5, named)
# Each line is <NAME> (0/1) plus <NAME>_Intensity (0-1000 per-mille).
#
# DERIVED FILE -- do not edit by hand.
# Regenerate:  python make_single_cam_cfg.py --keep Kinetix_red
# Parent:      DMD_dualcam_LUNF.cfg
#
# One camera only: Kinetix_red stays, Kinetix_blue is not loaded, so another
# process -- the Tweez 300 GUI -- can hold Kinetix_blue at the same time.
# PVCAM gives a camera to one process at a time; the two Kinetix are
# independent PVCAM devices here, so one owner each is expressible.
#
# Edits against the parent:
#   removed  Device,Kinetix_blue,PVCAM,Camera-1
#   unchanged  Property,Core,Camera,Kinetix_red (already the kept camera)
#
# BEFORE TRUSTING A SUCCESSFUL LOAD, check two things at the instrument:
#   1. Which physical body did MM open? PVCAM enumerates by index and
#      whether Camera-1 still means the same Kinetix once the other is
#      held elsewhere is untested. Check the serial, not the label.
#   2. Does the trap plane appear on this camera at all? That is optics.
#
# Needs mmcore install first -- every adapter in the lab's MM install
# fails against pymmcore's device API 75 (2026-08-27).
#
# Context: kb/decisions/2026-08-27-tweezers-first-light-measured-limits.md
# section 8, and 2026-08-27-optional-subsystems-one-timeline.md section 8.

# Generated by Configurator on Fri Jul 03 15:32:35 PDT 2026

# Reset
Property,Core,Initialize,0

# Devices
Device,COM10,SerialManager,COM10
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Nosepiece,NikonTi2,Nosepiece
Device,CondenserTurret,NikonTi2,CondenserTurret
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,FilterTurret2,NikonTi2,FilterTurret2
Device,Turret2Shutter,NikonTi2,Turret2Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,LappMainBranch1,NikonTi2,LappMainBranch1
Device,DiaLamp,NikonTi2,DiaLamp
Device,LightEngine,Lumencor,LightEngine
Device,Kinetix_red,PVCAM,Camera-2
Device,CSUW1-Hub,CSUW1,CSUW1-Hub
Device,CSUW1-Filter_Red,CSUW1,CSUW1-Filter Wheel
Device,CSUW1-Filter_Blue,CSUW1,CSUW1-Filter Wheel
Device,CSUW1-Dichroic,CSUW1,CSUW1-Dichroic Mirror
Device,CSUW1-Shutter,CSUW1,CSUW1-Shutter
Device,CSUW1-Bright,CSUW1,CSUW1-Bright Field
Device,CSUW1-Port,CSUW1,CSUW1-Port
Device,Aura,Lumencor,LightEngine

# --- LUN-F XL fast blanking via NI PCIe-6323 (added 2026-08-19) ---
Device,NIDAQHub,NIDAQ,NIDAQHub
Device,LUNF-Blanking,NIDAQ,NIDAQDO-Dev1/port0

# Pre-init settings for devices
Property,XYStage,Invert-X,No
Property,XYStage,Invert-Y,No
Property,LightEngine,Connection,COM3
Property,LightEngine,Model,GEN3
Property,CSUW1-Hub,Port,COM10
Property,CSUW1-Filter_Red,WheelNumber,1
Property,CSUW1-Filter_Blue,WheelNumber,2
Property,Aura,Connection,COM7
Property,Aura,Model,GEN3

# --- LUN-F DAQ pre-init ---
Property,NIDAQHub,Device,Dev1
Property,NIDAQHub,MaxSequenceLength,1024
Property,LUNF-Blanking,Line # of first slider,2
Property,LUNF-Blanking,Nr of TTL Sliders,7
Property,LUNF-Blanking,Sequencing,Use hub setting

# Pre-init settings for COM ports
Property,COM10,AnswerTimeout,8000
Property,COM10,BaudRate,115200
Property,COM10,DTR,Disable
Property,COM10,DataBits,8
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Fast USB to Serial,Disable
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1

# Hub (parent) references
Parent,ZDrive,Ti2-E__0
Parent,XYStage,Ti2-E__0
Parent,Nosepiece,Ti2-E__0
Parent,CondenserTurret,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,FilterTurret2,Ti2-E__0
Parent,Turret2Shutter,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,IntermediateMagnification,Ti2-E__0
Parent,LappMainBranch1,Ti2-E__0
Parent,DiaLamp,Ti2-E__0
Parent,LUNF-Blanking,NIDAQHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
# ======================================================================
# ZDrive: 1 = INCREASING Z MOVES TOWARD THE SAMPLE.
#
# Equivalently, smaller Z is the retracted direction -- measured by the
# operator 2026-09-05 and carried in code as
# `hardware.microscope.Z_RETRACT_DIRECTION = -1`. It stood here as 0
# ("unknown") until 2026-09-06 while the measurement sat in SAFETY.md
# prose and one Python constant, so MM itself could not answer which way
# retract was.
#
# ⚠ THIS IS A SAFETY-RELEVANT SIGN, AND IT REVERSED ONCE. Until
# 2026-09-05 this repository carried the opposite guess ("+Z is probably
# retracted"), inferred from a nosepiece rotation at ZDrive = 8288.740
# that broke nothing -- which under the measured convention had driven
# the incoming lens ~5.3 mm PAST the sample plane, so nothing broke
# because nothing was in the way. Anyone following the old guess would
# have driven the objective toward a coverslip 0.13 mm away believing
# they were retracting. SAFETY.md section 2 is the full account.
#
# WHY `1` AND NOT `-1` OR `2`: those are the two plausible encodings of
# this field and `1` means "toward sample" in BOTH of them -- as a sign
# (anything > 0 is toward the sample) and as the MM enum ordinal
# (0 Unknown, 1 TowardSample, 2 AwayFromSample). So this line does not
# rest on knowing which one MMCore parses. Do not "correct" it to 2 or
# -1 without first confirming the encoding against a live core; either
# would be a coin flip on a direction that swings glass at a coverslip.
#
# PFSOffset stays 0 = UNKNOWN, deliberately. Its sign convention has
# never been measured or stated -- nothing in this repository records
# which way its offset lens moves relative to the sample -- and it is in
# COLLISION_DEVICES alongside ZDrive and the Nosepiece. An unmeasured
# direction written here would read as verified.
# TODO(human): the PFSOffset sign, measured the way the ZDrive one was.
# ======================================================================
FocusDirection,ZDrive,1
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,Kinetix_red
Property,Core,Shutter,LightEngine
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-Plan Apo LmbdD0.13 100x Oil
Label,Nosepiece,4,5-Plan Apo LmbdD0.15 60x Oil
Label,Nosepiece,3,4-Apo LmbdS 40x WI
Label,Nosepiece,2,3-Plan Apo LmbdD0.8 20x
Label,Nosepiece,1,2-Plan Apo LmbdD4 10x
Label,Nosepiece,0,1-Plan Apo LmbdD20 4x
# CondenserTurret
Label,CondenserTurret,6,7-
Label,CondenserTurret,5,6-
Label,CondenserTurret,4,5-
Label,CondenserTurret,3,4-
Label,CondenserTurret,2,3-
Label,CondenserTurret,1,2-Shutter
Label,CondenserTurret,0,1-ND
# FilterTurret1
Label,FilterTurret1,5,6-Empty
Label,FilterTurret1,4,5-Empty
Label,FilterTurret1,3,4-Empty
Label,FilterTurret1,2,3-Empty
Label,FilterTurret1,1,2-Empty
Label,FilterTurret1,0,1-MXR00724 -Empty
# FilterTurret2
Label,FilterTurret2,5,6-Empty
Label,FilterTurret2,4,5-Empty
Label,FilterTurret2,3,4-Empty
Label,FilterTurret2,2,3-Empty
Label,FilterTurret2,1,2-Empty
Label,FilterTurret2,0,1-Empty
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE
# LappMainBranch1
Label,LappMainBranch1,1,mirror_in
Label,LappMainBranch1,0,mirror_out
# CSUW1-Filter_Red
Label,CSUW1-Filter_Red,9,open
Label,CSUW1-Filter_Red,8,b4
Label,CSUW1-Filter_Red,7,b3
Label,CSUW1-Filter_Red,6,b2
Label,CSUW1-Filter_Red,5,b1
Label,CSUW1-Filter_Red,4,647
Label,CSUW1-Filter_Red,3,555
Label,CSUW1-Filter_Red,2,488
Label,CSUW1-Filter_Red,1,405
Label,CSUW1-Filter_Red,0,multi
# CSUW1-Filter_Blue
Label,CSUW1-Filter_Blue,9,open
Label,CSUW1-Filter_Blue,8,b4
Label,CSUW1-Filter_Blue,7,b3
Label,CSUW1-Filter_Blue,6,b2
Label,CSUW1-Filter_Blue,5,b1
Label,CSUW1-Filter_Blue,4,647
Label,CSUW1-Filter_Blue,3,555
Label,CSUW1-Filter_Blue,2,488
Label,CSUW1-Filter_Blue,1,405
Label,CSUW1-Filter_Blue,0,multi
# CSUW1-Dichroic
Label,CSUW1-Dichroic,2,b2
Label,CSUW1-Dichroic,1,b1
Label,CSUW1-Dichroic,0,on
# CSUW1-Bright
Label,CSUW1-Bright,1,Bright Field
Label,CSUW1-Bright,0,Confocal
# CSUW1-Port
Label,CSUW1-Port,2,red_only
Label,CSUW1-Port,1,blue_red
Label,CSUW1-Port,0,blue_only

# Configuration presets
# Group: Channel

# Group: LaserLine  (405/488/561/640 blanking; power stays on the LUN-F FT4222 DAC)
ConfigGroup,LaserLine,405,LUNF-Blanking,line2,1
ConfigGroup,LaserLine,405,LUNF-Blanking,line4,0
ConfigGroup,LaserLine,405,LUNF-Blanking,line6,0
ConfigGroup,LaserLine,405,LUNF-Blanking,line8,0
ConfigGroup,LaserLine,488,LUNF-Blanking,line2,0
ConfigGroup,LaserLine,488,LUNF-Blanking,line4,1
ConfigGroup,LaserLine,488,LUNF-Blanking,line6,0
ConfigGroup,LaserLine,488,LUNF-Blanking,line8,0
ConfigGroup,LaserLine,561,LUNF-Blanking,line2,0
ConfigGroup,LaserLine,561,LUNF-Blanking,line4,0
ConfigGroup,LaserLine,561,LUNF-Blanking,line6,1
ConfigGroup,LaserLine,561,LUNF-Blanking,line8,0
ConfigGroup,LaserLine,640,LUNF-Blanking,line2,0
ConfigGroup,LaserLine,640,LUNF-Blanking,line4,0
ConfigGroup,LaserLine,640,LUNF-Blanking,line6,0
ConfigGroup,LaserLine,640,LUNF-Blanking,line8,1
ConfigGroup,LaserLine,AllOff,LUNF-Blanking,line2,0
ConfigGroup,LaserLine,AllOff,LUNF-Blanking,line4,0
ConfigGroup,LaserLine,AllOff,LUNF-Blanking,line6,0
ConfigGroup,LaserLine,AllOff,LUNF-Blanking,line8,0

# Group: System
# Preset: Startup
# ======================================================================
# WHY THESE ARE PINNED BY `State` AND NOT BY `Label`.
#
# The photometry is settled and is independent of every name below:
# LappMainBranch1 State 1 passes the Lapp-branch light to the sample
# (p99.9 21083 ADU), State 0 blocks it completely (139, identical to a
# dark frame). Measured 2026-09-04, re-confirmed independently
# 2026-09-06 through a different filter at a different exposure.
#
# The NAMES for those two states were swapped in this file until
# 2026-09-06 and are now `1 = mirror_in`, `0 = mirror_out` per the
# operator (2026-09-05) -- a mirror *inserted* is what couples the side
# branch in, which is also the physically sensible reading. Because that
# attribution moved once, a preset written as `...,Label,mirror_out`
# would have silently selected the BLOCKING state the day it moved.
# Pinning the integer makes this line survive any further renaming.
#   kb/systems/dualcam-config-corrections-pending.md item 1
#   kb/systems/current.md > lapp_branch
# ======================================================================
ConfigGroup,System,Startup,LappMainBranch1,State,1
#
# CSUW1-Port State 2 = `red_only` -- single-camera red, operator-stated 2026-09-05.
# Until now no Property or ConfigGroup line set this at load, so the
# port stayed wherever it physically was -- which for THIS file happens
# to be the harmless direction, but only by luck. The same omission in
# the dual-camera configs left them loading at red_only on 2026-09-05,
# so a file named "dualcam" did not put the instrument in dual-camera
# mode and Kinetix_blue received no light, with nothing erroring.
# Set here so the port is a declared value rather than a leftover.
# (pending-corrections item 2)
ConfigGroup,System,Startup,CSUW1-Port,State,2



# PixelSize settings

# Added 2026-09-04. This block was present and empty, so getPixelSizeUm()
# answered 0.0 and anything asking the instrument for its scale got nothing.
# Values mirror data/pixel_size.yaml <- kb/systems/current.md
# <- "Confocal_microscope_conversion_factor(Apr 2025).xlsx". Kinetix, binning 1.
#
# THESE PRESETS ASSUME THE INTERMEDIATE MAGNIFICATION IS 1x.
# They key on the Nosepiece alone, because IntermediateMagnification's turret
# positions are named nowhere in this file -- the Nosepiece has six Label lines
# above and that device has none. So MM will report these numbers whatever the
# changer is set to, and at 1.5x every one of them is high by exactly 1.5x.
#
# To close that, at the microscope:
#     python -m calibration.cli intermediate-mag <this file>
# It prints the Label lines for the turret and a full two-property preset per
# objective x factor. Once a preset names both devices, MM matches only when
# both agree and reports 0.0 at an unlisted combination -- absent rather than
# wrong, which is the behaviour to want back.
#
# Only 20x is a measurement. The other five are exactly 6.5/M to every digit
# they carry, i.e. the same arithmetic MM would do itself; 20x is 0.32373
# against a nominal 0.325, a real 20.078x. See data/pixel_size.yaml.
ConfigPixelSize,4x-1x,Nosepiece,Label,1-Plan Apo LmbdD20 4x
PixelSize_um,4x-1x,1.625
ConfigPixelSize,10x-1x,Nosepiece,Label,2-Plan Apo LmbdD4 10x
PixelSize_um,10x-1x,0.65
ConfigPixelSize,20x-1x,Nosepiece,Label,3-Plan Apo LmbdD0.8 20x
PixelSize_um,20x-1x,0.32373
ConfigPixelSize,40x-1x,Nosepiece,Label,4-Apo LmbdS 40x WI
PixelSize_um,40x-1x,0.1625
ConfigPixelSize,60x-1x,Nosepiece,Label,5-Plan Apo LmbdD0.15 60x Oil
PixelSize_um,60x-1x,0.10833
ConfigPixelSize,100x-1x,Nosepiece,Label,6-Plan Apo LmbdD0.13 100x Oil
PixelSize_um,100x-1x,0.06453
